PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'gender': '', 'age': '', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Use version = latest
  Window size (pixels) = [1920, 1080]
  expName = VPT
  keyboardBackend = ioHub
  logging level = warning
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Routines
  Routine Instruction_2
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        We will start with a practice block. Then, there will be 4 test blocks.

        In between the blocks, you can take a break.

        As a reminder, try to respond as quickly and accurately as possible.

        Thanks again for your participation!

        Pres SPACEBAR to begin
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice
    TextComponent fixationP
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    TextComponent PerspCueP
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .75
      text [set every repeat] = $PerspCueText
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    TextComponent NumberP
      letterHeight = 0.1
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = .75
      text [set every repeat] = $Numb
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    ImageComponent TestPicP
      image [set every repeat] = $Testpict
      size = (1, 1)
      startVal [time (s)] = 2
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    KeyboardComponent respp
      allowedKeys = 'b','n'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = first key
      storeCorrect = True
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  Routine Instruction
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        If your response is YES, press B
        If your response is NO, press N

        Please position your index finger on B, middle finger on N


        Press SPACEBAR to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Take a short break

        Press SPACEBAR when you are ready to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent PerspCue
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .75
      text [set every repeat] = $PerspCueText
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    TextComponent Number
      letterHeight = 0.1
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = .75
      text [set every repeat] = $Numb
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    ImageComponent TestPic
      image [set every repeat] = $Testpict
      size = (1, 1)
      startVal [time (s)] = 2
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    KeyboardComponent resp
      allowedKeys = "b","n"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = first key
      storeCorrect = True
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  Routine Ready
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Ready?

        Press SPACEBAR to begin
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ThxNBye
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for taking part.

        Goodbye!
Flow
  Routine Instruction
  Routine Instruction_2
  LoopInitiator PracTrials loopType="TrialHandler"
    Selected rows = 1:16
    conditionsFile = VPTtrialPrac.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'PerspCueText': 'He', 'corrAns': 1, 'Numb': 3, 'Consistency': 'consistent', 'Testpict': 'S3_O3_ML.bmp', 'avatar_facing_dir': 'left', 'other_see': 3, 'TrialID': 1003, 'self_see': 3},
      {'PerspCueText': 'You', 'corrAns': 1, 'Numb': 2, 'Consistency': 'consistent', 'Testpict': 'S2_O2_ML.bmp', 'avatar_facing_dir': 'left', 'other_see': 2, 'TrialID': 1012, 'self_see': 2},
      {'PerspCueText': 'He', 'corrAns': 2, 'Numb': 0, 'Consistency': 'consistent', 'Testpict': 'S1_O1_ML.bmp', 'avatar_facing_dir': 'left', 'other_see': 1, 'TrialID': 1001, 'self_see': 1},
      {'PerspCueText': 'You', 'corrAns': 2, 'Numb': 2, 'Consistency': 'consistent', 'Testpict': 'S3_O3_ML.bmp', 'avatar_facing_dir': 'left', 'other_see': 3, 'TrialID': 1009, 'self_see': 3},
      {'PerspCueText': 'He', 'corrAns': 1, 'Numb': 1, 'Consistency': 'consistent', 'Testpict': 'S1_O1_MR.bmp', 'avatar_facing_dir': 'right', 'other_see': 1, 'TrialID': 1004, 'self_see': 1},
      {'PerspCueText': 'You', 'corrAns': 1, 'Numb': 1, 'Consistency': 'consistent', 'Testpict': 'S1_O1_MR.bmp', 'avatar_facing_dir': 'right', 'other_see': 1, 'TrialID': 1011, 'self_see': 1},
      {'PerspCueText': 'He', 'corrAns': 2, 'Numb': 3, 'Consistency': 'consistent', 'Testpict': 'S2_O2_MR.bmp', 'avatar_facing_dir': 'right', 'other_see': 2, 'TrialID': 1002, 'self_see': 2},
      {'PerspCueText': 'You', 'corrAns': 2, 'Numb': 1, 'Consistency': 'consistent', 'Testpict': 'S3_O3_MR.bmp', 'avatar_facing_dir': 'right', 'other_see': 3, 'TrialID': 1010, 'self_see': 3}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
    Routine Practice
  LoopTerminator PracTrials
  Routine Ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = VPTtrial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'PerspCueText': 'You', 'corrAns': 'N', 'Numb': 1, 'Consistency': 'filler', 'Testpict': 'S0_O0_MR.bmp', 'avatar_facing_dir': 'right', 'other_see': 0, 'TrialID': 208, 'self_see': 0},
      {'PerspCueText': 'He', 'corrAns': 'B', 'Numb': 0, 'Consistency': 'filler', 'Testpict': 'S0_O0_ML.bmp', 'avatar_facing_dir': 'left', 'other_see': 0, 'TrialID': 201, 'self_see': 0},
      {'PerspCueText': 'You', 'corrAns': 'B', 'Numb': 3, 'Consistency': 'inconsistent', 'Testpict': 'S3_O2_MR.bmp', 'avatar_facing_dir': 'right', 'other_see': 2, 'TrialID': 120, 'self_see': 3},
      {'PerspCueText': 'You', 'corrAns': 'B', 'Numb': 2, 'Consistency': 'inconsistent', 'Testpict': 'S2_O0_ML.bmp', 'avatar_facing_dir': 'left', 'other_see': 0, 'TrialID': 119, 'self_see': 2},
      {'PerspCueText': 'You', 'corrAns': 'B', 'Numb': 1, 'Consistency': 'inconsistent', 'Testpict': 'S1_O0_MR.bmp', 'avatar_facing_dir': 'right', 'other_see': 0, 'TrialID': 118, 'self_see': 1},
      {'PerspCueText': 'You', 'corrAns': 'N', 'Numb': 1, 'Consistency': 'inconsistent', 'Testpict': 'S3_O1_ML.bmp', 'avatar_facing_dir': 'left', 'other_see': 1, 'TrialID': 117, 'self_see': 3},
      {'PerspCueText': 'You', 'corrAns': 'N', 'Numb': 1, 'Consistency': 'inconsistent', 'Testpict': 'S2_O1_MR.bmp', 'avatar_facing_dir': 'right', 'other_see': 1, 'TrialID': 116, 'self_see': 2},
      {'PerspCueText': 'You', 'corrAns': 'N', 'Numb': 0, 'Consistency': 'inconsistent', 'Testpict': 'S1_O0_ML.bmp', 'avatar_facing_dir': 'left', 'other_see': 0, 'TrialID': 115, 'self_see': 1}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
    Routine trial
  LoopTerminator trials
  Routine Break
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = VPTtrial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'PerspCueText': 'You', 'corrAns': 'N', 'Numb': 1, 'Consistency': 'filler', 'Testpict': 'S0_O0_MR.bmp', 'avatar_facing_dir': 'right', 'other_see': 0, 'TrialID': 208, 'self_see': 0},
      {'PerspCueText': 'He', 'corrAns': 'B', 'Numb': 0, 'Consistency': 'filler', 'Testpict': 'S0_O0_ML.bmp', 'avatar_facing_dir': 'left', 'other_see': 0, 'TrialID': 201, 'self_see': 0},
      {'PerspCueText': 'You', 'corrAns': 'B', 'Numb': 3, 'Consistency': 'inconsistent', 'Testpict': 'S3_O2_MR.bmp', 'avatar_facing_dir': 'right', 'other_see': 2, 'TrialID': 120, 'self_see': 3},
      {'PerspCueText': 'You', 'corrAns': 'B', 'Numb': 2, 'Consistency': 'inconsistent', 'Testpict': 'S2_O0_ML.bmp', 'avatar_facing_dir': 'left', 'other_see': 0, 'TrialID': 119, 'self_see': 2},
      {'PerspCueText': 'You', 'corrAns': 'B', 'Numb': 1, 'Consistency': 'inconsistent', 'Testpict': 'S1_O0_MR.bmp', 'avatar_facing_dir': 'right', 'other_see': 0, 'TrialID': 118, 'self_see': 1},
      {'PerspCueText': 'You', 'corrAns': 'N', 'Numb': 1, 'Consistency': 'inconsistent', 'Testpict': 'S3_O1_ML.bmp', 'avatar_facing_dir': 'left', 'other_see': 1, 'TrialID': 117, 'self_see': 3},
      {'PerspCueText': 'You', 'corrAns': 'N', 'Numb': 1, 'Consistency': 'inconsistent', 'Testpict': 'S2_O1_MR.bmp', 'avatar_facing_dir': 'right', 'other_see': 1, 'TrialID': 116, 'self_see': 2},
      {'PerspCueText': 'You', 'corrAns': 'N', 'Numb': 0, 'Consistency': 'inconsistent', 'Testpict': 'S1_O0_ML.bmp', 'avatar_facing_dir': 'left', 'other_see': 0, 'TrialID': 115, 'self_see': 1}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
    Routine trial
  LoopTerminator trials_2
  Routine Break
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = VPTtrial.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator trials_3
  Routine Break
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = VPTtrial.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator trials_4
  Routine ThxNBye
